PsychoPy2experiment version="1.90.2"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = psychopy
  Screen = 1
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Routines
  Routine trial
  Routine welcome
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Experiment Detekce odlišností







        Stiskněte mezerník..
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        V každé úloze vám ukážeme 9 obrázků. Vaším úkolem bude označit, který z obrázků je podle vás nejvíc vizuálně odlišný od ostatních. Jedná se celkový dojem, nejde o přítomnost lidí, zvířat či dalších objektů.


        Stiskněte mezerník..
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine welcome
  Routine instructions
  Routine trial
