PsychoPy2experiment version="3.0.7"
Settings
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {u'participant': u'1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1200]
  color = $[0.000,0.000,0.000]
  expName = scenesDRM
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Routines
  Routine fixation_cross_blank
    TextComponent text_9
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = +
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  Routine feedback
    CodeComponent code
      Code Type = Py
  Routine trial_test
    ImageComponent image_test
      image [set every repeat] = $pth
      size = (256, 256)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_5
      letterHeight = 0.1
      pos = (-0.5, -0.85)
      startVal [time (s)] = 0.0
      text = Již zobrazeno
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    TextComponent text_7
      letterHeight = 0.1
      pos = (0.5, -0.85)
      startVal [time (s)] = 0.0
      text = Nové
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    KeyboardComponent key_resp_6
      allowedKeys = 'left','right'
      correctAns = $corrKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine vigilance_rating
    ImageComponent image_query2
      image [set every repeat] = "stimuli_exp1/"+$img_name
      size = (700, 700)
      startVal [time (s)] = 0.0
      units = pix
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    RatingScaleComponent rating
      categoryChoices = not at all sure,somewhat sure,very sure
      forceEndRoutine = True
      high = 3
      low = 1
      pos = 0, -0.85
      singleClick = True
      size = 1.0
      startVal [time (s)] = 0.0
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      customize_everything:
        choices=['not at all sure','somewhat sure','very sure'],
        leftKeys='left',
        rightKeys = 'right',
        acceptKeys='down',
        pos = (0, -0.85),
        noMouse = True,
        markerStart='somewhat sure')
  Routine welcome
    TextComponent text
      letterHeight = 0.1
      pos = [0, .5]
      startVal [time (s)] = 0.0
      text = Memory for photographs
      units = norm
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_2
      letterHeight = 0.05
      pos = [0, -.10]
      startVal [time (s)] = 0.0
      units = norm
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      text:
        In this experiment, you will be presented with photographs and your task is memorize them as accurately as possible.

        Press Space to continue
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        lastquery=1
  Routine testpart_intro
    TextComponent text_13
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Část B

        V této části vám budou zobrazovány pouze výřezy ze scén a vaším úkolem bude opět rozhodnout, zda jste daný obrázek již viděli (šipka vlevo) nebo ne (šipka vpravo)

        Pokračujte stiskem mezerníku
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    ImageComponent imagex
      image [set every repeat] = "stimuli_exp1/"+$img_name
      size = [700,700]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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  Routine thanks
    TextComponent text_4
      letterHeight = 0.1
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = Děkujeme za účast
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  Routine vigilance
    ImageComponent image_query
      image [set every repeat] = "stimuli_exp1/"+$img_name
      size = (700, 700)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_4
      allowedKeys = 'left','right'
      correctAns = $corrKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_11
      letterHeight = 0.1
      pos = (-0.5, -0.85)
      startVal [time (s)] = 0.0
      text = old
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    TextComponent text_12
      letterHeight = 0.1
      pos = (0.5, -0.85)
      startVal [time (s)] = 0.0
      text = new
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  Routine instructions
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Photographs will be displayed in sequence. After 15 scenes, 15 photos will be displayed and your task will be to decide whether you saw each photo (left arrow) or not (right arrow). Then you will rate how sure you are with your response

        Each photo will be presented for 1 second

        Press Space to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent set_protocol
      Code Type = Py
      Begin Experiment:
        protId= 1 +((int(expInfo['participant']) - 1) % 20)

        protocolFile="protocols/P%03d.csv" % (protId)
  Routine category_start
    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $txtDur
      text [set every repeat] = $startTxt
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  Routine select_trial
    CodeComponent sel_trial
      Code Type = Py
      Begin Routine:
        if query != lastquery and lastquery == 1:
            lastquery = query
            startTxt = category
            txtDur = 2
        else:
            startTxt = '+'
            txtDur = 0.3

        if  query == 0:
            showImage = 1
            showQuery  = 0
        else:
            lastquery = 1
            showImage = 0
            showQuery  = 1
  Routine fixation_cross
    TextComponent text_6
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = +
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        if (lastResponse==1) :
          text_6.setColor("green")
        elif (lastResponse==2):
          text_6.setColor("red")
        else:
          text_6.setColor("white")
Flow
  Routine welcome
  Routine instructions
  LoopInitiator trialsA loopType="TrialHandler"
    conditionsFile = $protocolFile
    loopType = sequential
    nReps = 1
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    Routine select_trial
    Routine category_start
    LoopInitiator should_image_be_shown loopType="TrialHandler"
      loopType = sequential
      nReps = $showImage
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      Routine trial
    LoopTerminator should_image_be_shown
    LoopInitiator should_query_be_shown loopType="TrialHandler"
      loopType = sequential
      nReps = $showQuery
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      Routine vigilance
      Routine vigilance_rating
    LoopTerminator should_query_be_shown
  LoopTerminator trialsA
  Routine thanks
