PsychoPy2experiment version="1.90.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'subject_id': u'', u'protocol_id': u''}
  Units = use prefs
  Window size (pixels) = [1920, 1200]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' % (expInfo['subject_id'], expName, expInfo['date'])
  expName = detectOddOne_categ
  Screen = 1
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Routines
  Routine trial
    ImageComponent image1
      pos = (-414, 414)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $"stimuli/"+im1
      size = (256, 256)
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    ImageComponent image2
      pos = (-128, 414)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $"stimuli/"+im2
      size = (256, 256)
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    ImageComponent image3
      pos = (158, 414)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $"stimuli/"+im3
      size = (256, 256)
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9'
      startVal [time (s)] = 0.0
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    ImageComponent image4
      pos = (-414, 128)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $"stimuli/"+im4
      size = (256, 256)
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    ImageComponent image5
      pos = (-128, 128)
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $"stimuli/"+im5
      size = (256, 256)
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  Routine welcome
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Experiment Detekce odlišné scény







        Stiskněte mezerník..
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        V každé úloze vám ukážeme 9 obrázků. Vaším úkolem bude označit, který z obrázků je podle vás nejvíc vizuálně odlišný od ostatních. Jedná se celkový dojem, nejde o přítomnost lidí, zvířat či dalších objektů.


        Stiskněte mezerník..
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine welcome
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = protocols\P001.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('prot_id', 1), ('trial_id', 1), ('category', u'bathroom'), ('target_position', 9), ('selected_image', u'bathroom_2.jpg'), ('quintile', 4), ('im1', u'bathroom_2.jpg'), ('im2', u'bathroom_23.jpg'), ('im3', u'bathroom_59.jpg'), ('im4', u'bathroom_35.jpg'), ('im5', u'bathroom_6.jpg'), ('im6', u'bathroom_30.jpg'), ('im7', u'bathroom_7.jpg'), ('im8', u'bathroom_24.jpg'), ('im9', u'bathroom_28.jpg')]),
      OrderedDict([('prot_id', 1), ('trial_id', 2), ('category', u'kitchen'), ('target_position', 9), ('selected_image', u'kitchen_46.jpg'), ('quintile', 3), ('im1', u'kitchen_46.jpg'), ('im2', u'kitchen_4.jpg'), ('im3', u'kitchen_26.jpg'), ('im4', u'kitchen_21.jpg'), ('im5', u'kitchen_2.jpg'), ('im6', u'kitchen_34.jpg'), ('im7', u'kitchen_53.jpg'), ('im8', u'kitchen_27.jpg'), ('im9', u'kitchen_10.jpg')]),
      OrderedDict([('prot_id', 1), ('trial_id', 3), ('category', u'iceberg'), ('target_position', 4), ('selected_image', u'iceberg_67.jpg'), ('quintile', 2), ('im1', u'iceberg_67.jpg'), ('im2', u'iceberg_13.jpg'), ('im3', u'iceberg_11.jpg'), ('im4', u'iceberg_50.jpg'), ('im5', u'iceberg_14.jpg'), ('im6', u'iceberg_7.jpg'), ('im7', u'iceberg_21.jpg'), ('im8', u'iceberg_2.jpg'), ('im9', u'iceberg_55.jpg')]),
      OrderedDict([('prot_id', 1), ('trial_id', 4), ('category', u'church-inside'), ('target_position', 7), ('selected_image', u'church_inside_1.jpg'), ('quintile', 4), ('im1', u'church_inside_1.jpg'), ('im2', u'church_inside_64.jpg'), ('im3', u'church_inside_40.jpg'), ('im4', u'church_inside_45.jpg'), ('im5', u'church_inside_19.jpg'), ('im6', u'church_inside_5.jpg'), ('im7', u'church_inside_51.jpg'), ('im8', u'church_inside_16.jpg'), ('im9', u'church_inside_41.jpg')])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
    Routine trial
  LoopTerminator trials
